
protocol.scanTypes = [1, 1, 1]              # flags for airscan, offset scan, phantom scan

# Table and gantry
protocol.scanTrajectory = "Gantry_Helical"  # name of the function that defines the scanning trajectory and model
protocol.viewsPerRotation = 1000            # total numbers of view per rotation
protocol.viewCount = 1000                   # total number of views in scan
protocol.startViewId = 0                    # index of the first view in the scan
protocol.stopViewId = protocol.startViewId+protocol.viewCount-1 # index of the last view in the scan
protocol.airViewCount = 1                   # number of views averaged for air scan
protocol.offsetViewCount = 1                # number of views averaged for offset scan
protocol.rotationTime = 1.0                 # gantry rotation period (in seconds)
protocol.rotationDirection = 1              # gantry rotation direction (1=CW, -1 CCW, seen from table foot-end)
protocol.startAngle = 0                     # relative to vertical y-axis (n degrees)
protocol.tableSpeed = 0                     # speed of table translation along positive z-axis (in mm/sec)
protocol.startZ = 0                         # start z-position of table
protocol.tiltAngle = 0                      # gantry tilt angle towards negative z-axis (in degrees)
protocol.wobbleDistance = 0.0               # focalspot wobble distance
protocol.focalspotOffset = [0, 0, 0]        # focalspot position offset

# if changing number of projections need to change 3 things, viewCount, stopViewId, and viewsPerRotation
# protocol.viewCount = 100
# protocol.stopViewId = ct.cfg.protocol.startViewId+ct.cfg.protocol.viewCount-1
# protocol.viewsPerRotation = ct.cfg.protocol.viewCount

# X-ray tube technique and filtration
protocol.mA = 200                           # tube current (in mA)
protocol.spectrumCallback = "Spectrum"      # name of function that reads and models the X-ray spectrum
protocol.spectrumFilename = "tungsten_tar7_120_unfilt.dat" # name of the spectrum file
protocol.spectrumScaling = 1                # scaling factor, works for both mono- and poly-chromatic spectra
protocol.spectrumUnit_mm = 0;               # Is the spectrum file in units of photons/sec/mm^2/<current>?
protocol.spectrumUnit_mA = 1;               # Is the spectrum file in units of photons/sec/<area>/mA?
protocol.bowtie = "small.txt"               # name of the bowtie file (or [] for no bowtie)
protocol.filterCallback = "Xray_Filter"     # name of function to compute additional filtration
protocol.flatFilter = ['Al',3.0]            # additional filtration - materials and thicknesses (in mm)
protocol.dutyRatio = 1.0                    # tube ON time fraction (for pulsed tubes)

# Pre- and Post-log processes
protocol.maxPrep = 9                        # set the upper limit of prep, can be used for simple low signal correction
